<CompuCell3D>
    <Potts>
        <Dimensions x="231" y="231" z="1"/>
        <Anneal>10</Anneal>
        <Steps>100000</Steps>
        <Temperature>10</Temperature>
        <Flip2DimRatio>1</Flip2DimRatio>
        <NeighborOrder>2</NeighborOrder>
        <Boundary_y>Periodic</Boundary_y>
        <Boundary_x>Periodic</Boundary_x>
    </Potts>

    <ParameterScan Type="ParameterScan">Simulation/ParameterScanSpecs.json</ParameterScan>
    
    <Plugin Name="Volume">
        <TargetVolume>500</TargetVolume>
        <LambdaVolume>2.0</LambdaVolume>
    </Plugin>

    <Plugin Name="CellType">
        <CellType TypeName="Medium" TypeId="0"/>
        <CellType TypeName="Cell" TypeId="1"/>
    </Plugin>

    <Plugin Name="ContactLocalProduct">
        <!-- implements contact energies that depend on the cellclock; -->
        <!-- see CompuCell3D_Reference_Manual_v.3.6.2.pdf page 22  -->
        <ContactSpecificity Type1="Medium" Type2="Medium">0</ContactSpecificity>
        <ContactSpecificity Type1="Medium" Type2="Cell">-16</ContactSpecificity>
        <!-- note: this is minus the normal energy term(!); see below -->
        <ContactSpecificity Type1="Cell" Type2="Cell">-1</ContactSpecificity>
        <!-- <ContactFunctionType>Quadratic</ContactFunctionType> -->
        <EnergyOffset>0.0</EnergyOffset>
        <NeighborOrder>2</NeighborOrder>
        <CustomFunction>
            <Variable>J1</Variable>
            <Variable>J2</Variable>
            <Expression>16-({{J}})*(cos(J1-J2))</Expression>
        </CustomFunction>
    </Plugin>
    
    <!-- OLD CONTACT PLUGIN THAT ALLOWS ONLY FOR CONSTANT COEFFICIENTS -->
    <!-- <Plugin Name="Contact"> -->
        <!-- <Energy Type1="Medium" Type2="Medium">0</Energy> -->
        <!-- &lt;!&ndash; <Energy Type1="Cell" Type2="Cell">30-10*(cos(self.cellclock[neighbor]-self.cellclock[cell])</Energy> &ndash;&gt;  -->
        <!-- <Energy Type1="Cell" Type2="Medium">15</Energy> -->
        <!-- <Energy Type1="Cell" Type2="Cell">40ABSURD</Energy> -->
        <!-- <NeighborOrder>5</NeighborOrder> -->
    <!-- </Plugin> -->

    <Plugin Name="NeighborTracker"/>
    
    <Plugin Name="CenterOfMass"/>
    
    <Steppable Type="PIFInitializer">
        <PIFName>cellgrid.piff</PIFName>
    </Steppable>

    
    
</CompuCell3D>
